PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 0.8431, 0.6078
  expName = SoloProject
  keyboardBackend = Pyglet
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Routines
  Routine welcome
    TextComponent text
      color = 0.6471, -0.1765, -0.7647
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        You will be shown images of happy, sad and neutral face. Each denoted with a colour: green, red and neutral each representing an emotion.

        Press 'g' for happy, 'r' for sad and 'n' neutral. If you have a sad face (denoted by 'r') with colour text in 'green'; kindly refer that face and press the emotion colour i.e 'r' and so on.

        Press SPACEBAR whenever you are ready :)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image
      image [set every repeat] = $image_path
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 1.5
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    TextComponent text_2
      color [set every repeat] = $color
      letterHeight [set every repeat] = 0.1
      pos = (0.0, 0.0)
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 1.5
      text [set every repeat] = $emotion
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    KeyboardComponent key_resp_2
      allowedKeys = 'g','r','n'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine end
    TextComponent text_3
      color = 0.6471, -0.1765, -0.7647
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
      text = Thank You!
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/shachee/Downloads/SoloProject_Data - Sheet1.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('image_path', '/Users/shachee/Downloads/LabInPsychology_24/FinalProject/happy.jpeg'), ('color', 'green'), ('stim_condition', 'C'), ('corr_resp', 'g'), ('emotion', 'happy')]),
      OrderedDict([('image_path', '/Users/shachee/Downloads/LabInPsychology_24/FinalProject/sad.jpeg'), ('color', 'red'), ('stim_condition', 'C'), ('corr_resp', 'r'), ('emotion', 'sad')]),
      OrderedDict([('image_path', '/Users/shachee/Downloads/LabInPsychology_24/FinalProject/neutral.png'), ('color', 'gray'), ('stim_condition', 'C'), ('corr_resp', 'n'), ('emotion', 'neutral')]),
      OrderedDict([('image_path', '/Users/shachee/Downloads/LabInPsychology_24/FinalProject/neutral.png'), ('color', 'green'), ('stim_condition', 'I'), ('corr_resp', 'n'), ('emotion', 'happy')]),
      OrderedDict([('image_path', '/Users/shachee/Downloads/LabInPsychology_24/FinalProject/sad.jpeg'), ('color', 'green'), ('stim_condition', 'I'), ('corr_resp', 'r'), ('emotion', 'happy')]),
      OrderedDict([('image_path', '/Users/shachee/Downloads/LabInPsychology_24/FinalProject/happy.jpeg'), ('color', 'red'), ('stim_condition', 'I'), ('corr_resp', 'g'), ('emotion', 'sad')]),
      OrderedDict([('image_path', '/Users/shachee/Downloads/LabInPsychology_24/FinalProject/neutral.png'), ('color', 'red'), ('stim_condition', 'I'), ('corr_resp', 'n'), ('emotion', 'sad')]),
      OrderedDict([('image_path', '/Users/shachee/Downloads/LabInPsychology_24/FinalProject/happy.jpeg'), ('color', 'gray'), ('stim_condition', 'I'), ('corr_resp', 'g'), ('emotion', 'neutral')])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
    Routine trial
  LoopTerminator trials
  Routine end
